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Source:Signal%20Properties int SourceCh= 128 // number of digitized and stored channels (allow_override)
Source:Signal%20Properties int SampleBlockSize= 128 // number of samples transmitted at a time (allow_override)
Source:Signal%20Properties int SamplingRate= 1024 // sampling rate (allow_override)
Source:Signal%20Properties list ChannelNames= 0 // list of channel names (allow_override)
Source:Signal%20Properties list SourceChOffset= 128 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 0 0 // Offset for channels in A/D units (allow_override)
Source:Signal%20Properties list SourceChGain= 128 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 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0.03125 0.03125 0.03125 0.03125 // gain for each channel (A/D units per physical unit) (allow_override)
Storage:Data%20Location string DataDirectory= D:/ArmFIngerRoboConnection/BCI_DL/BCI2000/data/test001 ..\data % % // path to top level data directory (directory)
Storage:Session string SubjectName= S01_Piano_S0 Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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Source:SignalGeneratorADC int ModulateAmplitude= 0 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC list NaNChannels= 1 auto // Channel numbers set to NaN if space is pressed (empty if not used)
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:SignalGeneratorADC matrix SourceProperties= 0 { Frequency Amplitude } // Source properties
Source:SignalGeneratorADC matrix MixingMatrix= 0 1 // Source-to-sensor projection, rows are sources, columns are sensors
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation string StorageTime= Thu%20Oct%2024%2016:31:04%202013 // time of beginning of data storage
Source:Source%20Filter int NotchFilter= 2 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Source%20Filter int HighPassFilter= 2 0 0 2 // Source high pass filter: 0: disabled, 1: at 0.1Hz, 2: at 1Hz (enumeration)
Source:Source%20Filter int LowPassFilter= 0 0 0 4 // Source low pass filter: 0: disabled, 1: at 9Hz, 2: at 30Hz, 3: at 40Hz, 4: at 70Hz (enumeration)
Source:Source%20Filter list UnfilteredChannels= 0 // names or indices of channels to omit from source filter
Source:Alignment int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes) (boolean)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing list TransmitChList= 128 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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125 126 127 128 // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 9 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 SourceFilter 1.01 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
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Application:Human%20Interface%20Devices string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:45443 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
System:Command%20Line%20Arguments variant PythonAppClassFile= CP_2D_EEG_Dylan.py Piano_Application_vel.py Piano_Application_vel.py Piano_Application_vel.py 
System:Command%20Line%20Arguments variant PythonAppShell= 0 0 0 0 
System:Command%20Line%20Arguments variant PythonAppLog= Applogger.txt Applogger.txt Applogger.txt Applogger.txt 
System:Command%20Line%20Arguments variant PythonAppWD= C:/Users/helabrobotics/Desktop/BCI_DL/BCI2000/python D:/ArmFIngerRoboConnection/BCI_DL/BCI2000/python/ArmFingerRobo D:/ArmFIngerRoboConnection/BCI_DL/BCI2000/python/ArmFingerRobo D:/ArmFIngerRoboConnection/BCI_DL/BCI2000/python/ArmFingerRobo 
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Source:Signal%20Properties:DataIOFilter list ReferenceChannelName= 0 % % a // list of labels for reference channel or channels
Source:Signal%20Properties:DataIOFilter list GroundChannelName= 0 % % a // label of the ground channel
Source:Playback int EnslavePython= 0 0 0 1 // force BCPy2000 modules to follow states supplied by the source module without being able to change them (boolean)
PythonApp string ApplicationDescription= continuous%20pursuit%20task % a z // Identifies the stimulus presentation module
PythonApp int ShowSignalTime= 0 0 0 1 // show a timestamp based on the number of processed samples (boolean)
PythonApp:Design int TrialsPerBlock= 5 20 1 % // number of trials in one block
PythonApp:Design int BlocksPerRun= 1 20 1 % // number of sub-blocks in one run
PythonApp:Design int ShowFixation= 0 0 0 1 // show a fixation point in the center (boolean)
PythonApp:Design int ControlDim= 1 0 0 2 // Control Dimension: 1=1D-Horizontal, 2=1D-Vertical, 3=2D (enumeration)
PythonApp:Screen int ScreenId= -1 -1 % % // on which screen should the stimulus window be opened - use -1 for last
PythonApp:Screen float WindowHeight= 1080 100 % % // height of the stimulus window
PythonApp:Screen float WindowWidth= 1920 100 % % // width of the stimulus window
PythonApp:Screen float WindowLeft= 0 100 % % // horizontal position of the stimulus window
PythonApp:Screen float WindowTop= -540 100 % % // vertical position of the stimulus window
PythonApp:Stimuli int TargetSize= 37 10 0 200 // diameter of target
PythonApp:Stimuli int TargetSquareSize= 60 10 1 300 // side length of each target square
PythonApp:Stimuli int TargetSquareSpacing= 47 10 0 300 // horizontal gap between adjacent target squares
PythonApp:Stimuli int KeyWidth= 95 90 10 300 // piano key width
PythonApp:Stimuli int KeyHeight= 480 320 10 800 // piano key height
PythonApp:Stimuli int KeySpacing= 10 4 0 40 // gap between piano keys
PythonApp:Feedback float CursorFriction= 1 1 0 10 // constant damping force on cursor movement
PythonApp:Feedback float CursorViscosity= 1 1 0 10 // damping force proportional to velocity
PythonApp:Feedback float CursorVelocity= 500 1 0 1000 // velocity of cursors
PythonApp:Feedback int ControlType= 2 2 0 2 // 1=force-based, 2=velocity-based, 0=let program choose
PythonApp:Feedback float MaxArmVelocity= 300 30 0 1000 // maximum arm velocity in key widths per update
PythonApp:Feedback int PosReset= 0 1 0 1 // reset arm start position from ArmStartIdxSeq (boolean)
PythonApp:Feedback int BalancedLabel= 0 1 0 1 // balanced left/right/rest labels for calibration (boolean)
PythonApp:Feedback int FreePlaying= 1 0 0 1 // free playing mode (boolean)
PythonApp:Feedback int SongList= 0 0 0 1 // play songs (boolean)
PythonApp:Feedback int Copilot= 0 0 0 1 // play songs with the copilot guidance (boolean)
PythonApp:Feedback int ShowCopilotStatus= 0 0 0 1 // show copilot status or not (boolean)
PythonApp:Feedback float CopilotThreshold= 0.50 0.50 0 1 // minimum song posterior for copilot assistance
PythonApp:Feedback float CopilotMaxAssist= 1.00 1.00 0 1 // maximum copilot control fraction
PythonApp:Feedback float CopilotAssistGain= 1.00 1.00 0 5 // gain from posterior probability to assist fraction
PythonApp:Feedback float CopilotArmAttractGain= 6.00 50.00 0 100 // velocity gain for copilot arm attraction
PythonApp:Feedback float CopilotSubjectMoveProb= 0.80 0.80 0 1 // likelihood model probability that subject covers target
PythonApp:Feedback float CopilotSubjectFingerProb= 0.60 0.60 0 1 // likelihood model probability that subject presses target finger
PythonApp:Feedback string CopilotProbModel= exp // the key probability model, exponential or linear
PythonApp:Feedback int ContinuousFeedback= 1 1 0 1 // show continuous finger feedback (boolean)
PythonApp:Feedback int playSound= 0 1 0 1 // play sound (boolean)
PythonApp:Paradigm float MoveTime= 2 1.0 0.0 60.0 // Time (s) for arm movement
PythonApp:Paradigm float PressTime= 2 1.0 0.0 60.0 // Time (s) for finger press
PythonApp:Paradigm int ResultHoldTime= 375 200 0 5000 // Time in ms to hold arm/finger result before next task
PythonApp:Click float NewTargetDistance= 0.4 0.35 0 0.5 // distance between successive targets (fraction of screen)
PythonApp:Click int ClickRadius= 50 37 0 2100 // minimum distance between cursor and target for successful click
PythonApp:Click float ClickThreshold= 20 2 0 100 // z-scored threshold for click signal
PythonApp:Click float InterClickTime= 2 1.0 0.0 60.0 // Time (s) between clicks
PythonApp:Click int Resistance= 0 1 1 100 // Gain to move cursor towards center
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 PythonAppFilter 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain (noedit)(readonly)
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Filtering:SpatialFilter int SpatialFilterType= 0 0 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter matrix SpatialFilter= { C4 C3 } 10 1 0 0 -.25 0 0 0 -.25 -.25 -.25 0 1 -.25 0 -.25 -.25 -.25 0 0 0 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
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System:Command%20Line%20Arguments variant PythonSigClassFile= DL_processing.py Piano_Processing.py Piano_Processing.py Piano_Processing.py 
System:Command%20Line%20Arguments variant PythonSigShell= 0 0 0 0 
System:Command%20Line%20Arguments variant PythonSigLog= Siglogger.txt Siglogger.txt Siglogger.txt Siglogger.txt 
System:Command%20Line%20Arguments variant PythonSigWD= C:/Users/helabrobotics/Desktop/BCI_DL/BCI2000/python D:/ArmFIngerRoboConnection/BCI_DL/BCI2000/python/ArmFingerRobo D:/ArmFIngerRoboConnection/BCI_DL/BCI2000/python/ArmFingerRobo D:/ArmFIngerRoboConnection/BCI_DL/BCI2000/python/ArmFingerRobo 
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PythonSig string SignalProcessingDescription= implement%20the%20Description(self)%20hook%20to%20supply%20a%20description%20of%20what%20this%20module%20does % a z // Identifies the signal processing module
Filtering:Input string Device= biosemi // EEG device used
Filtering:DeepLearning int Subject= 1 1 1 15 // Subject number (1-15)
Filtering:DeepLearning int Session= 1 1 1 10 // Session number (use the current session ex. start at 2 for DL)
Filtering:Normalizer float NormalizationUpdateTime= 100 6 0 30 // How long between normalizer updates
Filtering:Normalizer int BufferLength= 30 30 0 100 // Buffer length in secondss
Filtering:Decoder string ArmDecoder= EEGK_RL // The arm decoder to use
Filtering:Decoder string FingerDecoder= DL // The finger decoder to use
Filtering:ArmDecoding int ArmWindowLength= 500 500 0 5000 // window length in ms
Filtering:ArmDecoding string ArmModelPath= D:\ArmFIngerRoboConnection\BCI_DL\BCI2000\python\trained_models\S01_EEGK_Piano.pt // path to the trained model
Filtering:ArmDecoding int ArmSmoothing= 1 1 0 1 // Whether to smooth arm velocity (boolean)
Filtering:FingerDecoding int DownsampleRate= 256 100 0 1024 // downsampling rate
Filtering:FingerDecoding int WindowLength= 1000 1000 0 5000 // window length in ms
Filtering:FingerDecoding int SmoothingLength= 5 5 0 10 // smoothing length in number of windows
Filtering:FingerDecoding string ModelPath= D:\ArmFIngerRoboConnection\BCI_DL\BCI2000\python\trained_models\S01_EEGNet_Finger_S5_1_256.h5 // path to the trained model
Filtering:Normalizer int ConstantSpeed= 0 1 0 1 // Whether to output constant speed (boolean)
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System:Configuration matrix SignalProcessingFilterChain= 2 { Filter%20Name Position%20String } SpatialFilter 2.B PythonSigFilter 2.C // SignalProcessing filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 5432 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
